PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  expName = soloProject
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_prime
      image [set every repeat] = $Image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp
      correctAns = $corr_res1
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This experiment is a word classification task, requiring the use of 'N' and 'M' computer keys to categorize items into groups.

        You are required to categorise faces shown as female or male. When a female face appears, press 'N' and when a male face appears, press 'M'

        You are required to categorise words as masculine or feminine, given prevailing gender stereotypes.
        When stereotypically feminine words (perfume, doll, flower, dress, lipstick) appear, press 'N'
        When stereotypically masculine words (beer, hammer, bowtie, briefcase, cigar) appear, press 'M'

        Respond as fast and accurately as you can.

        The first 12 trials will be practice to understand the task.

        When you are ready, press the 'SPACEBAR' to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $target
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    KeyboardComponent key_resp_2
      correctAns = $corr_res2
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, the associated key responses for faces have changed.

        Now, press the key 'N' for male faces and 'M' for female faces.

        The key response to the word categorisation remains the same - 'N' for feminine words and 'M' for masculine words.

        The first 12 trials will be for you understand and practice this change.

        Respond as fast and accurately as you can.

        When you are ready, press the 'SPACE' bar to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Now the experiment begins!
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = practice_SRcompatible_conditionsFile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'perfume', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'doll', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'flower', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'dress', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'lipstick', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'perfume', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'doll', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'flower', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'dress', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'lipstick', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'C'},
      {'Image': 'Faces/CFD-IM-728-041-N.jpg', 'corr_res1': 'm', 'target': 'beer', 'corr_res2': 'm', 'ss_compat': 'C', 'sr_compat': 'C'}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
    Routine trial
    Routine trial2
  LoopTerminator trials_2
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SRcompatible_conditionsFile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'perfume', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'doll', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'flower', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'dress', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'lipstick', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'n', 'target': 'jewelry', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'perfume', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'doll', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'flower', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'dress', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'n', 'target': 'lipstick', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_inc': 'C'}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
    Routine trial
    Routine trial2
  LoopTerminator trials
  Routine instructions2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = practice_SRinc_conditionsFile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'm', 'target': 'perfume', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'm', 'target': 'doll', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'm', 'target': 'flower', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'm', 'target': 'beer', 'corr_res2': 'm', 'ss_compat': 'I', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'm', 'target': 'hammer', 'corr_res2': 'm', 'ss_compat': 'I', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'm', 'target': 'bowtie', 'corr_res2': 'm', 'ss_compat': 'I', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IM-728-041-N.jpg', 'corr_res1': 'n', 'target': 'briefcase', 'corr_res2': 'm', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IM-728-041-N.jpg', 'corr_res1': 'n', 'target': 'cigar', 'corr_res2': 'm', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IM-728-041-N.jpg', 'corr_res1': 'n', 'target': 'football', 'corr_res2': 'm', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IM-731-223-N.jpg', 'corr_res1': 'n', 'target': 'dress', 'corr_res2': 'n', 'ss_compat': 'I', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IM-731-223-N.jpg', 'corr_res1': 'n', 'target': 'lipstick', 'corr_res2': 'n', 'ss_compat': 'I', 'sr_compat': 'I'}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
    Routine trial
    Routine trial2
  LoopTerminator trials_3
  Routine begin
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = SRinc_conditionsFile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'm', 'target': 'perfume', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'm', 'target': 'doll', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'm', 'target': 'flower', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'm', 'target': 'dress', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'm', 'target': 'lipstick', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-601-519-N.jpg', 'corr_res1': 'm', 'target': 'jewelry', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'm', 'target': 'perfume', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'm', 'target': 'doll', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'm', 'target': 'flower', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'm', 'target': 'dress', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'},
      {'Image': 'Faces/CFD-IF-602-134-N.jpg', 'corr_res1': 'm', 'target': 'lipstick', 'corr_res2': 'n', 'ss_compat': 'C', 'sr_compat': 'I'}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
    Routine trial
    Routine trial2
  LoopTerminator trials_4
