PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Stroop task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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  Routine Instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is to respond to the colour of the text displayed. If the font colour is red, press R and if the font colour is blue, press B.
        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks!
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions excel.xlsx
    loopType = random
    nReps = 100
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'correct_res': 'r', 'stim_condition': 'C'},
      {'word': 'RED', 'colour': 'blue', 'correct_res': 'b', 'stim_condition': 'I'},
      {'word': 'BLUE', 'colour': 'red', 'correct_res': 'r', 'stim_condition': 'I'},
      {'word': 'BLUE', 'colour': 'blue', 'correct_res': 'b', 'stim_condition': 'C'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
